PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['09_Participante (Participant):'], expName, expInfo['date'])
  Experiment info = {'idioma': "['', 'español', 'inglés']", '08_Idioma preferida (Preferred language):': "['', 'español', 'inglés']", '09_Participante (Participant):': 'part000', '05_País de nacimiento (Birth country):': "['', 'México', 'Estados Unidos']", '03_Edad (Age):': '', '07_Nivel más alto de formación académica (Highest level of formal education):': "['', 'Menos de la escuela secundaria', 'Escuela Secundaria', 'Un poco de universidad', 'Universidad (diplomatura, licenciatura)', 'Un poco de escuela graduada', 'Máster', 'Doctorado']", '04_Sexo (Gender):': "['', 'Hombre', 'Mujer']", '02_Apellido (Last name):': '', '01_Nombre (First name):': '', '06_Lugar de residencia (Place of residence):': "['', 'Tucson', 'Hermosillo']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = blp
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Routines
  Routine lang_use_ins
    TextComponent text_lang_use_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $langUse
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    KeyboardComponent key_resp_lang_use
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_use
    TextComponent text_section_lang_use
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_use_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_use_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_use_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_use
      categoryChoices = 0, 10, 20, 40, 50, 60, 70, 80, 90, 100
      forceEndRoutine = True
      high = 100
      labels = 0%, 100%
      low = 0
      markerStart = 50
      pos = 0, -0.1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_proficiency
    TextComponent text_section_lang_prof
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_prof_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_prof_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_prof_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_prof
      categoryChoices = 0,1,2,3,4,5,6
      forceEndRoutine = True
      high = 6
      labels = Not well at all, Very well
      low = 0
      markerStart = 3
      pos = 0, -0.1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_hist_ins
    TextComponent text_lang_his_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $langHist
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    KeyboardComponent key_resp_lang_hist
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lang_att_ins
    TextComponent text_lang_att_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $langAtt
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    KeyboardComponent key_resp_lang_att_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_attitudes
    TextComponent text_lang_att_section
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_att_ques
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_att_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_att
      categoryChoices = 0,1,2,3,4,5,6
      forceEndRoutine = True
      high = 6
      labels = disagree, agree
      low = 0
      markerStart = 3
      pos = 0, 0
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_prof_ins
    TextComponent text_lang_prof_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $langProf
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    KeyboardComponent key_resp_lang_prof_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        tmp = expInfo['08_Idioma preferida (Preferred language):']
        lang = tmp[0]

        if 'e' == lang:
            preferLang = 'spanish'
            section = 'sectionEsp'
            questionText = 'questionTextEsp'
            language = 'languageEsp'
            instructions = 'Nos gustaría pedir su ayuda para contestar a las siguientes preguntas sobre su historial lingüístico, uso, actitudes y competencia. Esta encuesta ha sido creada con el apoyo del "Center for Open Educational Resources and Language Learning" de la Universidad de Texas en Austin para poder tener un mayor conocimiento sobre los perfiles de hablantes bilingües independientemente de sus diversos orígenes y en diferentes contextos. La encuesta contiene 19 preguntas y le llevará menos de 10 minutos para completar. Esto no es una prueba, por tanto no hay respuestas correctas ni incorrectas. Por favor conteste cada pregunta y responda con sinceridad, ya que solamente así se podrá garantizar el éxito de esta investigación. Muchas gracias por su ayuda.\n\nPresione el botón "blanco" para continuar.'
            langHist = 'Historial lingüístico\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre su historial lingüístico marcando la casilla apropiada.\n\nPresione el botón "blanco" para continuar.'
            langUse = 'Uso de lenguas\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre su uso de lenguas marcando la casilla apropiada. El uso total de todas las preguntas en cada pregunta debe llegar al 100%.\n\nPresione el botón "blanco" para continuar.'
            langProf = 'Competencia\n\nEn esta sección, nos gustaría que considerara su competencia de lengua marcando la casilla de 0 a 6.\n\nPresione el botón "blanco" para continuar.'
            langAtt = 'Actitudes\n\nEn esta sección, nos gustaría que contestara a las siguientes afirmaciones sobre actitudes lingüísticas marcando las casillas de 0 a 6.\n\nPresione el botón "blanco" para continuar.'
            labHist1 = 'Desde el Nacimiento,20+'
            #labUse
            #labProf
            #labAtt
        elif 'i' == lang:
            preferLang = 'english'
            section = 'sectionEng'
            questionText = 'questionTextEng'
            language = 'languageEng'
            instructions = 'We would like to ask you to help us by answering the following questions concerning your language history, use, attitudes, and proficiency. This survey was created with support from the Center for Open Educational Resources and Language Learning at the University of Texas at Austin to better understand the profiles of bilingual speakers in diverse settings with diverse backgrounds. The survey consists of 19 questions and will take less than 10 minutes to complete. This is not a test, so there are no right or wrong answers. Please answer every question and give your answers sincerely. Thank you very much for your help.\n\nPress the "white" button to continue'
            langHist = 'Language history\n\nIn this section, we would like you to answer some factual questions about your language history by placing a check in the appropriate box.\n\nPress the "white" button to begin.'
            langUse = 'Language use\n\nIn this section, we would like you to answer some questions about your language use by placing a check in the appropriate box. Total use for all languages in a given question should equal 100%.\n\nPress the "white" button to begin.'
            langProf = 'Language proficiency\n\nIn this section, we would like you to rate your language proficiency by giving marks from 0 to 6.\n\nPress the "white" button to begin.'
            langAtt = 'Language attitudes\n\nIn this section, we would like you to respond to statements about language attitudes by giving marks from 0-6.\n\nPress the spacebar to begin.'
            labHist1 = 'Since birth,20+'
        else:
            instructions = 'Por favor, hable con el investigador.\n\nPlease talk to the experimenter.'
    TextComponent text_instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = $instructions
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_history_2
    TextComponent text_section_lang_hist_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_hist_lang_2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_2
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_2
      forceEndRoutine = True
      high = 20
      labels = 0, 10, 20
      low = 0
      markerStart = 10
      pos = 0, -0.3
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_history
    TextComponent text_section_lang_hist
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_hist_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist
      forceEndRoutine = True
      high = 20
      labels = $labHist1
      low = 0
      markerStart = 10
      pos = 0, -0.3
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_history_3
    TextComponent text_section_lang_hist_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_3
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
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    TextComponent text_lang_hist_lang_3
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_3
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_3
      forceEndRoutine = True
      high = 20
      labels = 0, 10, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.3
      size = 1.5
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine lang_hist_ins
  LoopInitiator trials_hist_1 loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_history
  LoopTerminator trials_hist_1
  LoopInitiator trials_hist_2 loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_history_2
  LoopTerminator trials_hist_2
  LoopInitiator trials_hist_3 loopType="TrialHandler"
    Selected rows = 2:12
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_history_3
  LoopTerminator trials_hist_3
  Routine lang_use_ins
  LoopInitiator trials_use loopType="TrialHandler"
    Selected rows = 12:27
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_use
  LoopTerminator trials_use
  Routine lang_prof_ins
  LoopInitiator trials_prof loopType="TrialHandler"
    Selected rows = 27:35
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_proficiency
  LoopTerminator trials_prof
  Routine lang_att_ins
  LoopInitiator trials_att loopType="TrialHandler"
    Selected rows = 35:43
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('questionNum', '1a'), ('color', 'green'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '1b'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('questionNum', '2a'), ('color', 'green'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '2b'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_attitudes
  LoopTerminator trials_att
