PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'Preferred Language': '["español", "inglés"]', 'Participant': '', 'Country': '', 'Age': '', 'Highest level of ed': '', 'Gender': '', 'Place of residence': 'city,state'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = blp
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Routines
  Routine lang_use_ins
    TextComponent text_lang_use_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Language use

        In this section, we would like you to answer some questions about your language use by placing a check in the appropriate box. Total use for all languages in a given question should equal 100%.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_use
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_use
    TextComponent text_section_lang_use
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $section
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    TextComponent text_lang_use_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    TextComponent text_lang_use_lang
      color = blue
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $language
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    TextComponent text_lang_use_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_use
      categoryChoices = 0, 10, 20, 40, 50, 60, 70, 80, 90, 100
      forceEndRoutine = True
      high = 100
      labels = 0%, 100%
      low = 0
      pos = 0, -0.1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_proficiency
    TextComponent text_section_lang_prof
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $section
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    TextComponent text_lang_prof_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    TextComponent text_lang_prof_lang
      color = blue
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $language
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    TextComponent text_lang_prof_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    TextComponent text_lang_prof_qmark
      letterHeight = 0.1
      pos = (0.17, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = ?
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    RatingScaleComponent rating_lang_prof
      categoryChoices = 0,1,2,3,4,5,6
      forceEndRoutine = True
      high = 6
      labels = Not well at all, Very well
      low = 0
      pos = 0, -0.1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_hist_ins
    TextComponent text_lang_his_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Language history

        In this section, we would like you to answer some factual questions about your language history by placing a check in the appropriate box.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_hist
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lang_att_ins
    TextComponent text_lang_att_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Language attitudes

        In this section, we would like you to respond to statements about language attitudes by giving marks from 0-6.

        Press the spacebar to begin.
    KeyboardComponent key_resp_lang_att_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_attitudes
    TextComponent text_lang_att_section
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $section
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    TextComponent text_lang_att_ques
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    TextComponent text_lang_att_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_att
      categoryChoices = 0,1,2,3,4,5,6
      forceEndRoutine = True
      high = 6
      labels = disagree, agree
      low = 0
      pos = 0, 0
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_history
    TextComponent text_section_lang_hist
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $sectionEng
    TextComponent text_lang_hist_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionTextEng
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    TextComponent text_lang_hist_lang
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $languageEng
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    TextComponent text_lang_hist_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist
      categoryChoices = Since Birth, 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20+
      forceEndRoutine = True
      labels = Since birth, 20+
      markerStart = 10
      pos = 0, -0.3
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_prof_ins
    TextComponent text_lang_prof_ins
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Language proficiency

        In this section, we would like you to rate your language proficiency by giving marks from 0 to 6.

        Press the spacebar to begin
    KeyboardComponent key_resp_lang_prof_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = We would like to ask you to help us by answering the following questions concerning your language history, use, attitudes, and proficiency. This survey was created with support from the Center for Open Educational Resources and Language Learning at the University of Texas at Austin to better understand the profiles of bilingual speakers in diverse settings with diverse backgrounds. The survey consists of 19 questions and will take less than 10 minutes to complete. This is not a test, so there are no right or wrong answers. Please answer every question and give your answers sincerely. Thank you very much for your help.
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        '''from psychopy import gui

        myDlg = gui.Dlg(title="JWP's experiment")
        myDlg.addText('Subject info')
        myDlg.addField('Name:')
        myDlg.addField('Age:', 21)
        myDlg.addText('Experiment Info')
        myDlg.addField('Grating Ori:',45)
        myDlg.addField('Group:', choices=["Test", "Control"])
        ok_data = myDlg.show()  # show dialog and wait for OK or Cancel
        if myDlg.OK:  # or if ok_data is not None
            print(ok_data)
        else:
            print('user cancelled')'''
Flow
  Routine instructions
  Routine lang_hist_ins
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sectionEng', 'Language history'), ('questionNum', '1a'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '1b'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '2a'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '2b'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_history
  LoopTerminator trials
  Routine lang_use_ins
  LoopInitiator trials_use loopType="TrialHandler"
    Selected rows = 12:27
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sectionEng', 'Language history'), ('questionNum', '1a'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '1b'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '2a'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('sectionEng', 'Language history'), ('questionNum', '2b'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_use
  LoopTerminator trials_use
  Routine lang_prof_ins
  LoopInitiator trials_prof loopType="TrialHandler"
    Selected rows = 27:35
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_proficiency
  LoopTerminator trials_prof
  Routine lang_att_ins
  LoopInitiator trials_att loopType="TrialHandler"
    Selected rows = 35:43
    conditionsFile = condition_file/sp_en_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_attitudes
  LoopTerminator trials_att
