PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'participant':''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[1.000,1.000,1.000]
  expName = decision_lexica_visual
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Routines
  Routine instrucciones
    KeyboardComponent start_LexEsp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent lexEsp_Instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test consists of 90 trials, in each of which you will see a string letters.
        Your task is to decide whether this is an existing Spanish word or not.
        If you think it is an existing Spanish word, press 's' for 'yes' and if you think it is not an existing Spanish word, press 'n' for 'no'.
        If you are sure that the word exists, even if you don't know its exact meaning, you may still respond 'yes'.
        But if you are not sure if it is an existing word, you should respond 'no'.
        You have as much time as you like for each decision.
        Press space bar to start.
  Routine cierre
    TextComponent text_Closing
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = gracias
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = nothing
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  Routine pruebas
    TextComponent text_Word
      color = black
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent text_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent text_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEsp_key_resp
      allowedKeys = '0','1'
      correctAns = $corrAnsEngV
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
Flow
  Routine instrucciones
  LoopInitiator ciclo loopType="TrialHandler"
    conditionsFile = LexEng.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 0), ('Word', 'platery'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 0), ('Word', 'denial'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 0), ('Word', 'generic'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 1), ('Word', 'mensible'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 2), ('Word', 'scornful'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 3), ('Word', 'stoutly'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 4), ('Word', 'ablaze'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 5), ('Word', 'kermshaw'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 6), ('Word', 'moonlit'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 7), ('Word', 'lofty'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 8), ('Word', 'hurricane'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 9), ('Word', 'flaw'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 10), ('Word', 'alberation'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 11), ('Word', 'unkempt'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 12), ('Word', 'breeding'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 13), ('Word', 'festivity'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 14), ('Word', 'screech'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 15), ('Word', 'savory'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 16), ('Word', 'plaudate'), ('corrAnsEngV', 0)]),
      OrderedDict([('Order', 17), ('Word', 'shin'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 18), ('Word', 'fluid'), ('corrAnsEngV', 1)])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
    Routine pruebas
  LoopTerminator ciclo
  Routine cierre
