PsychoPy2experiment version="3.0.7"
Settings
  Data filename = u'data/original_data/part_files/%s_%s_%s_%s' % (expInfo['01_Participante (Participant):'],expInfo['10_Idioma preferido (Preferred language):'], expInfo['02_Sesión (Session):'], expName)
  Experiment info = {'01_Participante (Participant):': 'part000', '02_Sesión (Session):': "['A', 'B', 'C', 'D']", '03_Nombre (First name):': '', '04_Apellido (Last name):': '', '05_Edad (Age):': '', '06_Sexo (Gender):': "['', 'Hombre', 'Mujer']", '07_País de nacimiento (Birth country):': "['', 'México', 'Estados Unidos']", '08_Lugar de residencia (Place of residence):': "['', 'Tucson', 'Hermosillo']", '09_Nivel más alto de formación académica (Highest level of formal education):': "['', 'Menos de la escuela secundaria', 'Escuela Secundaria', 'Un poco de universidad', 'Universidad (diplomatura, licenciatura)', 'Un poco de escuela graduada', 'Máster', 'Doctorado']", '10_Idioma preferido (Preferred language):': "['', 'español', 'inglés']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.7
  Window size (pixels) = [1280, 800]
  expName = Segmentation
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Routines
  Routine pracIns
    TextComponent pracSegInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted va a completar un experimento. Antes de eso, va a realizar una práctica.

        Va a ver una secuencia de letras.

        Posteriormente, una serie de palabras aparecerá de manera individual.

        Deberá presionar el botón verde lo más rápido posible si ve la secuencia de letras previamente mostrada en alguna de esas palabras.

        No haga nada si dichas palabras no contienen tal secuencia de letras.

        Presione el botón blanco para empezar la práctica.
    KeyboardComponent pracSeg_Start
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine expIns
    TextComponent startExp
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted acaba de completar la práctica. Ahora va a empezar el experimento.

        Recuerde:

        Va a ver una secuencia de letras.

        Posteriormente, una serie de palabras aparecerá de manera individual.

        Deberá presionar el botón verde lo más rápido posible si ve la secuencia de letras previamente mostrada en alguna de esas palabras.

        No haga nada si dichas palabras no contienen tal secuencia de letras.

        Presione el botón blanco para empezar el experimento.
    KeyboardComponent startExpTrials
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine targetExp
    CodeComponent expTarCounter
      Code Type = Py
      Begin Routine:
        targetExp= experiment + "%i" %expTarLoop.thisN
      End Routine:
        targetExpRem = eval(targetExp).upper()
    TextComponent expTarget
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $eval(targetExp).upper()
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    TextComponent expEncuentre
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Encuentre
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  Routine trialExp
    CodeComponent expSegCounter
      Code Type = Py
      Begin Routine:
        carrierExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expCarrier
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierExp)
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    KeyboardComponent seg_key_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent expReminder_1
      letterHeight = 0.1
      pos = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $targetExpRem
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  Routine trialSyllable
    TextComponent expSylAnsCVC
      letterHeight = 0.2
      pos = (-.5, 0)
      startVal [time (s)] = 2
      text [set every repeat] = $leftKey
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    TextComponent expSylAnsCV
      letterHeight = 0.2
      pos = (.5,0)
      startVal [time (s)] = 2
      text [set every repeat] = $rightKey
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    TextComponent expSylTarget
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    KeyboardComponent expSyl_key_resp
      allowedKeys = '2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = True
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  Routine syllableExpIns
    TextComponent expSyllableInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Usted acaba de completar la práctica. Ahora va a empezar el experimento.

        Recuerde:

        Varias palabras aparecerán en la pantalla de manera individual y deberá fijarse en la primera sílaba.

        Para cada palabra, habrá dos opciones que podrán corresponder a esa primera sílaba. Su trabajo es seleccionar la opción correcta.

        Presione el botón azul si su respuesta está a la izquierda.

        Presione el botón amarillo si su respuesta está a la derecha.

        Presione el botón blanco para empezar el experimento.
    KeyboardComponent expSyllableStart
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracIns
    TextComponent pracSyllableInstr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Muchas gracias. Usted acaba de completar el primer experimento.

        Ahora comenzará el segundo experimento. Antes de eso, va a realizar una práctica.

        Varias palabras aparecerán en la pantalla de manera individual y deberá fijarse en la primera sílaba.

        Para cada palabra, habrá dos opciones que podrán corresponder a esa primera sílaba. Su trabajo es seleccionar la opción correcta.

        Presione el botón azul si su respuesta está a la izquierda.

        Presione el botón amarillo si su respuesta está a la derecha.

        Presione el botón blanco para empezar la práctica.
    KeyboardComponent pracSyllableStart
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracTrial
    TextComponent pracSylTarget
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    TextComponent pracSylAnsCVC
      letterHeight = 0.2
      pos = (-.5, 0)
      startVal [time (s)] = 2
      text [set every repeat] = $leftKey
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    TextComponent pracSylAnsCV
      letterHeight = 0.2
      pos = (.5, 0)
      startVal [time (s)] = 2
      text [set every repeat] = $rightKey
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    KeyboardComponent pracSyl_key_resp
      allowedKeys = '2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine lexTaleEngInstructions
    TextComponent lexEng_Instr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $lexEng
      wrapWidth = 1.5
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    KeyboardComponent start_LexEng
      allowedKeys = '0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lexEspInstrucciones
    CodeComponent startup_Code
      Code Type = Py
      Begin Experiment:
        if expInfo['02_Sesión (Session):'] == 'A':
            conditionPrac="data/processed_data/exp_files/pracCondA.csv"
            conditionExp="data/processed_data/exp_files/expCondA.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondA.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondA.csv"
            practice = "practiceListA"
            experiment = "stimuliListA"
        elif expInfo['02_Sesión (Session):'] == 'B':
            conditionPrac="data/processed_data/exp_files/pracCondB.csv"
            conditionExp="data/processed_data/exp_files/expCondB.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondB.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondB.csv"
            practice = "practiceListB"
            experiment = "stimuliListB"
        elif expInfo['02_Sesión (Session):'] == 'C':
            conditionPrac="data/processed_data/exp_files/pracCondC.csv"
            conditionExp="data/processed_data/exp_files/expCondC.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondC.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondC.csv"
            practice = "practiceListC"
            experiment = "stimuliListC"
        else:
            conditionPrac="data/processed_data/exp_files/pracCondD.csv"
            conditionExp="data/processed_data/exp_files/expCondD.csv"
            conditionSylPrac="data/processed_data/exp_files/sylpracCondD.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondD.csv"
            practice = "practiceListD"
            experiment = "stimuliListD"


        tmp = expInfo['10_Idioma preferido (Preferred language):']
        lang = tmp[0]

        if 'e' == lang:
            preferLang = 'spanish'
            section = 'sectionEsp'
            questionText = 'questionTextEsp'
            language = 'languageEsp'
            instructions = 'Nos gustaría pedir su ayuda para contestar a las siguientes preguntas sobre su historial lingüístico, uso, actitudes y competencia. Esta encuesta ha sido creada con el apoyo del "Center for Open Educational Resources and Language Learning" de la Universidad de Texas en Austin para poder tener un mayor conocimiento sobre los perfiles de hablantes bilingües independientemente de sus diversos orígenes y en diferentes contextos. La encuesta contiene 19 preguntas y le llevará menos de 10 minutos para completar. Esto no es una prueba, por tanto no hay respuestas correctas ni incorrectas. Por favor conteste cada pregunta y responda con sinceridad, ya que solamente así se podrá garantizar el éxito de esta investigación. Muchas gracias por su ayuda.\n\nPresione el espaciador para continuar.'
            langHist = 'Historial lingüístico\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre su historial lingüístico marcando la escala según la leyenda.\n\nPresione el espaciador para continuar.'
            langUse = 'Uso de lenguas\n\nEn esta sección, nos gustaría que contestara algunas preguntas sobre el uso de lenguas que conoce marcando la escala según la leyenda. El total de las respuestas a cada pregunta debe llegar al 100%.\n\nPresione el espaciador para continuar.'
            langProf = 'Competencia\n\nEn esta sección, nos gustaría que considerara su competencia lingüística marcando la escala de 0 a 6.\n\nPresione el espaciador para continuar.'
            langAtt = 'Actitudes\n\nEn esta sección, nos gustaría que contestara a las siguientes afirmaciones sobre actitudes lingüísticas marcando la escala de 0 a 6.\n\nPresione el espaciador para continuar.'
            lexEsp = '''En este test, encontrará 90 secuencias de letras que parecen pertenecer al español. Solo algunas de ellas son palabras reales.
                        \nPor favor, señale las palabras que usted conoce (las que esté convencido de que son palabras en español, incluso aunque no sea capaz de dar el significado preciso).
                        \nPara cada palabra, si piensa que pertenece al español, presione el botón verde para indicar "sí" y si no, presione el botón rojo para indicar "no".
                        \nDispone de todo el tiempo que necesite para tomar cada decisión.
                        \nPresione el botón blanco para empezar.'''
            lexEng = '''En este test, encontrará 60 secuencias de letras que parecen pertenecer al inglés. Solo algunas de ellas son palabras reales.
                        \nPor favor, señale las palabras que usted conoce (las que esté convencido de que son palabras en inglés, incluso aunque no sea capaz de dar el significado preciso).
                        \nSi piensa que se trata de una palabra que pertenece al inglés, presione el botón verde para indicar "yes" y si no, presione el botón rojo para indicar "no".
                        \nDispone de todo el tiempo que necesite para tomar cada decisión.
                        \nPresione el botón blanco para empezar.'''
            labHist1 = '0 = Desde al nacimiento     20+ = 20 o más años'
            labHist2 = '0 = Tan pronto como recuerdo     20+ = aún no'
            labHist3 = '0 = Nunca                          20+ = 20 o más años'
            labUse = 'El uso total de todas las lenguas en cada pregunta debe llegar al 100%'
            labProf = '0 = No muy bien                                   6 = muy bien'
            labAtt = '0 = No estoy de acuerdo                     6 = Estoy de acuerdo'
        elif 'i' == lang:
            preferLang = 'english'
            section = 'sectionEng'
            questionText = 'questionTextEng'
            language = 'languageEng'
            instructions = '''We would like to ask you to help us by answering the following questions concerning your language history, use,
        attitudes, and proficiency. This survey was created with support from the Center for Open Educational Resources
        and Language Learning at the University of Texas at Austin
        to better understand the profiles of bilingual speakers in diverse settings with diverse backgrounds. The survey
        consists of 19 questions and will take less than 10 minutes to complete. This is not a test, so there are no right or
        wrong answers. Please answer every question and give your answers sincerely. Thank you very much for your help.
        \nPress the spacebar to continue'''
            langHist = 'Language history\n\nIn this section, we would like you to answer some factual questions about your language history by marking the scale in the appropriate location.\n\nPress the spacebar to begin.'
            langUse = 'Language use\n\nIn this section, we would like you to answer some questions about your language use by marking the scale in the appropriate location. Total use for all languages in a given question should equal 100%.\n\nPress the spacebar to begin.'
            langProf = 'Language proficiency\n\nIn this section, we would like you to rate your language proficiency by marking the scale in the appropriate location from 0 to 6.\n\nPress the spacebar to begin.'
            langAtt = 'Language attitudes\n\nIn this section, we would like you to respond to statements about language attitudes by marking the scale in the appropriate location from 0-6.\n\nPress the spacebar to begin.'
            lexEsp = '''En este test, encontrará 90 secuencias de letras que parecen pertenecer al español. Solo algunas de ellas son palabras reales.
                        \nPor favor, señale las palabras que usted conoce (las que esté convencido de que son palabras en español, incluso aunque no sea capaz de dar el significado preciso).
                        \nPara cada palabra, si piensa que pertenece al español, presione el botón verde para indicar "sí" y si no, presione el botón rojo para indicar "no".
                        \nDispone de todo el tiempo que necesite para tomar cada decisión.
                        \nPresione el botón blanco para empezar.'''
            lexEng = '''This test consists of 60 trials, in each of which you will see a string of letters.
                        \nYour task is to decide whether this is an existing English word or not.
                        \nIf you think it is an existing English word, press the green button for "yes" and if you think it is not an existing English word, press the red button for "no". If you are sure that the word exists, even if you do not know its exact meaning, you may still respond "yes". But if you are not sure if it is an existing word, you should respond "no".
                        \nYou have as much time as you like for each decision.
                        \nPress the white button to start.'''
            labHist1 = '0 = Since birth     20+ = 20 or more years'
            labHist2 = '0 = As long as I can remember     20+ = Not yet comfortable'
            labHist3 = '0 = Never                                20+ = 20 or more years'
            labUse = 'The total usage of all languages must equal 100%'
            labProf = '0 = Not very well                                   6 = Very well'
            labAtt = '0 = Disagree                                       6 = Agree'
        else:
            instructions = 'Por favor, hable con el investigador.\n\nPlease talk to the experimenter.'
    TextComponent lexEsp_Instr
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $lexEsp
      wrapWidth = 1.5
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    KeyboardComponent start_LexEsp
      allowedKeys = '0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lexTaleEsp
    TextComponent esp_Word
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent esp_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = sí
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    TextComponent esp_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEsp_key_resp
      allowedKeys = '1','4'
      correctAns = $corrAnsEspV
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
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  Routine lexTaleEng
    TextComponent eng_Word
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0.2
      text [set every repeat] = $Word
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    TextComponent eng_Yes
      color = green
      letterHeight = 0.2
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.2
      text = yes
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    TextComponent eng_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.2
      text = no
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    KeyboardComponent lexEng_key_resp
      allowedKeys = '1','4'
      correctAns = $corrAnsEngV
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = first key
      storeCorrect = True
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  Routine gracias
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas gracias!
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  Routine instructions_blp
    TextComponent text_instructions
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $instructions
      wrapWidth = 1.5
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lang_hist_ins
    TextComponent text_lang_his_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langHist
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_hist
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_history
    TextComponent text_section_lang_hist
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist1
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_use_ins
    TextComponent text_lang_use_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langUse
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_use
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_use
    TextComponent text_section_lang_use
      color = black
      letterHeight = 0.1
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_use_question
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_use_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_use_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_blp_use
      forceEndRoutine = True
      high = 10
      labels = 0%,50%,100%
      low = 0
      markerStart = 5
      pos = 0,-0.4
      scaleDescription = $labUse
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_prof_ins
    TextComponent text_lang_prof_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langProf
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_prof_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_proficiency
    TextComponent text_section_lang_prof
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_prof_question
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_prof_lang
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_prof_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_prof
      forceEndRoutine = True
      high = 6
      labels = 0,3,6
      low = 0
      markerStart = 3
      pos = 0, -0.4
      scaleDescription = $labProf
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine lang_att_ins
    TextComponent text_lang_att_ins
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = $langAtt
      wrapWidth = 1.5
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    KeyboardComponent key_resp_lang_att_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine language_attitudes
    TextComponent text_lang_att_section
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($section)
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    TextComponent text_lang_att_ques
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_prof_att
      color [set every repeat] = $color
      letterHeight = 0.1
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_att_qnum
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_att
      forceEndRoutine = True
      high = 6
      labels = 0,3,6
      low = 0
      markerStart = 3
      pos = 0, -0.4
      scaleDescription = $labAtt
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine targetPrac
    CodeComponent pracTarCounter
      Code Type = Py
      Begin Routine:
        #pracTargetText = tar_syl
        #if pracTrialLoop.thisTrialN == 0:
        #    pracTargetText = pracTargetText
        #else:
        #    continueRoutine = False

        #pracTargetText = tar_syl
        if pracTrialLoop.thisTrialN == 0:
            #pracTargetText = pracTargetText
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        #targetPracRem = tar_syl.upper()
    TextComponent pracEncuentre
      letterHeight = 0.1
      pos = (-0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Encuentre
    TextComponent pracSegTarget
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $tar_syl.upper()
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.5
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  Routine trialPrac
    TextComponent pracSegCarrier
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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    KeyboardComponent pracSeg_key_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = nothing
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    TextComponent pracReminder_1
      letterHeight = 0.1
      pos = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $tar_syl.upper()
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  Routine language_history_2
    TextComponent text_section_lang_hist_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang_2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_2
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_2
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist2
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine language_history_3
    TextComponent text_section_lang_hist_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        eval($section)
    TextComponent text_lang_hist_question_3
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($questionText)
      wrapWidth = 1.8
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    TextComponent text_lang_hist_lang_3
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = eval($language)
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    TextComponent text_lang_hist_qnum_3
      letterHeight = 0.1
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionNum
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    RatingScaleComponent rating_lang_hist_3
      forceEndRoutine = True
      high = 20
      labels = 0, 20+
      low = 0
      markerStart = 10
      pos = 0, -0.4
      scaleDescription = $labHist3
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine descanso
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if expTarLoop.thisN != 23:
            continueRoutine = False
    TextComponent descansar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Tome un descanso de dos minutos.

        Si desea continuar sin tomar un descanso o tomar uno más corto,
        presione el botón blanco.
    KeyboardComponent key_resp_continue
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      store = nothing
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  Routine isi_halfsec
    TextComponent blankText_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine isi_150msec_exp
    TextComponent expReminder_2
      letterHeight = 0.1
      pos = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      text [set every repeat] = $targetExpRem
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  Routine isi_150msec_prac
    TextComponent pracReminder_2
      letterHeight = 0.1
      pos = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $tar_syl.upper()
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  Routine faster
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        fasterText = ''
        if expTarLoop.thisN == 6:
            fasterText = 'Gracias, más rápido.'
        elif expTarLoop.thisN == 13:
            fasterText = '¡Rápido!'
        elif expTarLoop.thisN == 18:
            fasterText = '¡Bien hecho!'
        elif expTarLoop.thisN == 27:
            fasterText = 'Muchas gracias, pero responda más rápido.'
        elif expTarLoop.thisN == 32:
            fasterText = '¡Genial!'
        elif expTarLoop.thisN == 36:
            fasterText = 'Más rápido por favor.'
        elif expTarLoop.thisN == 41:
            fasterText = '¡Excelente!'
        elif expTarLoop.thisN == 44:
            fasterText = '¡Responda lo más rápido posible!'
        else:
            continueRoutine = False
    TextComponent rapido
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $fasterText
      wrapWidth = 1.5
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  Routine pracFaster
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        pracFasterText = ''
        if pracTarLoop.thisTrialN == 8:
            pracFasterText = 'Muchas gracias, pero responda más rápido.'
        else:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      text [set every repeat] = $pracFasterText
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  Routine mq_targetPrac
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Encuentre

        GA
  Routine mq_trialPrac
Flow
  Routine lexEspInstrucciones
  LoopInitiator lexEspLoop loopType="TrialHandler"
    conditionsFile = data/processed_data/exp_files/lexTaleListEsp.csv
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('Order', 0), ('Word', 'pladeno'), ('Translation', 'NW'), ('corrAnsEspV', 4)]),
      OrderedDict([('Order', 0), ('Word', 'delantera'), ('Translation', 'first position'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 0), ('Word', 'garbardina'), ('Translation', 'raincoat'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 1), ('Word', 'terzo'), ('Translation', 'NW'), ('corrAnsEspV', 4)]),
      OrderedDict([('Order', 2), ('Word', 'pellizcar'), ('Translation', 'pinch'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 3), ('Word', 'pulmones'), ('Translation', 'lungs'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 4), ('Word', 'batillón'), ('Translation', 'NW'), ('corrAnsEspV', 4)]),
      OrderedDict([('Order', 5), ('Word', 'zapato'), ('Translation', 'shoe'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 6), ('Word', 'tergiversar'), ('Translation', 'distort'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 7), ('Word', 'pésimo'), ('Translation', 'abysmal'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 8), ('Word', 'cadeña'), ('Translation', 'NW'), ('corrAnsEspV', 4)]),
      OrderedDict([('Order', 9), ('Word', 'hacha'), ('Translation', 'axe'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 10), ('Word', 'antar'), ('Translation', 'NW'), ('corrAnsEspV', 4)]),
      OrderedDict([('Order', 11), ('Word', 'cenefa'), ('Translation', 'edging'), ('corrAnsEspV', 1)]),
      OrderedDict([('Order', 12), ('Word', 'asesinato'), ('Translation', 'murder'), ('corrAnsEspV', 1)])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
    Routine lexTaleEsp
  LoopTerminator lexEspLoop
  Routine pracIns
  LoopInitiator pracTarLoop loopType="TrialHandler"
    conditionsFile = practice_randomize.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'block01'), ('path', 'data/processed_data/exp_files/block01')]),
      OrderedDict([('block', 'block02'), ('path', 'data/processed_data/exp_files/block02')]),
      OrderedDict([('block', 'block03'), ('path', 'data/processed_data/exp_files/block03')]),
      OrderedDict([('block', 'block04'), ('path', 'data/processed_data/exp_files/block04')]),
      OrderedDict([('block', 'block05'), ('path', 'data/processed_data/exp_files/block05')]),
      OrderedDict([('block', 'block06'), ('path', 'data/processed_data/exp_files/block06')]),
      OrderedDict([('block', 'block07'), ('path', 'data/processed_data/exp_files/block07')]),
      OrderedDict([('block', 'block08'), ('path', 'data/processed_data/exp_files/block08')]),
      OrderedDict([('block', 'block09'), ('path', 'data/processed_data/exp_files/block09')]),
      OrderedDict([('block', 'block10'), ('path', 'data/processed_data/exp_files/block10')]),
      OrderedDict([('block', 'block11'), ('path', 'data/processed_data/exp_files/block11')]),
      OrderedDict([('block', 'block12'), ('path', 'data/processed_data/exp_files/block12')]),
      OrderedDict([('block', 'block13'), ('path', 'data/processed_data/exp_files/block13')]),
      OrderedDict([('block', 'block14'), ('path', 'data/processed_data/exp_files/block14')]),
      OrderedDict([('block', 'block15'), ('path', 'data/processed_data/exp_files/block15')]),
      OrderedDict([('block', 'block16'), ('path', 'data/processed_data/exp_files/block16')]),
      OrderedDict([('block', 'block17'), ('path', 'data/processed_data/exp_files/block17')])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
    Routine pracFaster
    LoopInitiator pracTrialLoop loopType="TrialHandler"
      conditionsFile = $path
      loopType = random
      nReps = 1
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      Routine targetPrac
      Routine trialPrac
      Routine isi_150msec_prac
    LoopTerminator pracTrialLoop
  LoopTerminator pracTarLoop
  Routine expIns
  LoopInitiator expTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = data/processed_data/exp_files/exp_trials.xlsx
    loopType = sequential
    nReps = 48
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    conditions:
      [OrderedDict([('block', 'block01'), ('word', 'balada'), ('wd_int_syl', 'CV'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'match'), ('lemma', 'bal'), ('first_3', 'bal'), ('item_type', 'critical'), ('corrAns', 1)]),
      OrderedDict([('block', 'block01'), ('word', 'rendija'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'ren'), ('item_type', 'filler01'), ('corrAns', 'None')]),
      OrderedDict([('block', 'block01'), ('word', 'tortuga'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'tor'), ('item_type', 'filler02'), ('corrAns', 'None')]),
      OrderedDict([('block', 'block01'), ('word', 'semilla'), ('wd_int_syl', 'CV'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'match'), ('lemma', 'bal'), ('first_3', 'sem'), ('item_type', 'filler03'), ('corrAns', 'None')]),
      OrderedDict([('block', 'block01'), ('word', 'torpeza'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'tor'), ('item_type', 'filler04'), ('corrAns', 'None')]),
      OrderedDict([('block', 'block01'), ('word', 'sortija'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'sor'), ('item_type', 'filler05'), ('corrAns', 'None')])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
    Routine faster
    Routine descanso
    Routine targetExp
    Routine isi_halfsec
    LoopInitiator expTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = data/processed_data/exp_files/exp_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'block01'), ('word', 'balada'), ('wd_int_syl', 'CV'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'match'), ('lemma', 'bal'), ('first_3', 'bal'), ('item_type', 'critical'), ('corrAns', 1)]),
        OrderedDict([('block', 'block01'), ('word', 'rendija'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'ren'), ('item_type', 'filler01'), ('corrAns', 'None')]),
        OrderedDict([('block', 'block01'), ('word', 'tortuga'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'tor'), ('item_type', 'filler02'), ('corrAns', 'None')]),
        OrderedDict([('block', 'block01'), ('word', 'semilla'), ('wd_int_syl', 'CV'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'match'), ('lemma', 'bal'), ('first_3', 'sem'), ('item_type', 'filler03'), ('corrAns', 'None')]),
        OrderedDict([('block', 'block01'), ('word', 'torpeza'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'tor'), ('item_type', 'filler04'), ('corrAns', 'None')]),
        OrderedDict([('block', 'block01'), ('word', 'sortija'), ('wd_int_syl', 'CVC'), ('tar_syl', 'CV'), ('wd_status', 'word'), ('matching', 'mismatch'), ('lemma', 'bal'), ('first_3', 'sor'), ('item_type', 'filler05'), ('corrAns', 'None')])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
      Routine trialExp
      Routine isi_150msec_exp
    LoopTerminator expTrialLoop
  LoopTerminator expTarLoop
  Routine lexTaleEngInstructions
  LoopInitiator lexEngLoop loopType="TrialHandler"
    conditionsFile = data/processed_data/exp_files/lexTaleListEng.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 0), ('Word', 'platery'), ('corrAnsEngV', 4)]),
      OrderedDict([('Order', 0), ('Word', 'denial'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 0), ('Word', 'generic'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 1), ('Word', 'mensible'), ('corrAnsEngV', 4)]),
      OrderedDict([('Order', 2), ('Word', 'scornful'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 3), ('Word', 'stoutly'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 4), ('Word', 'ablaze'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 5), ('Word', 'kermshaw'), ('corrAnsEngV', 4)]),
      OrderedDict([('Order', 6), ('Word', 'moonlit'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 7), ('Word', 'lofty'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 8), ('Word', 'hurricane'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 9), ('Word', 'flaw'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 10), ('Word', 'alberation'), ('corrAnsEngV', 4)]),
      OrderedDict([('Order', 11), ('Word', 'unkempt'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 12), ('Word', 'breeding'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 13), ('Word', 'festivity'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 14), ('Word', 'screech'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 15), ('Word', 'savory'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 16), ('Word', 'plaudate'), ('corrAnsEngV', 4)]),
      OrderedDict([('Order', 17), ('Word', 'shin'), ('corrAnsEngV', 1)]),
      OrderedDict([('Order', 18), ('Word', 'fluid'), ('corrAnsEngV', 1)])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
    Routine lexTaleEng
  LoopTerminator lexEngLoop
  Routine instructions_blp
  Routine lang_hist_ins
  LoopInitiator trials_blp_hist loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_history
  LoopTerminator trials_blp_hist
  LoopInitiator trials_blp_hist_2 loopType="TrialHandler"
    Selected rows = 2:4
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('questionNum', '1a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '1b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start learning the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a aprender las siguientes lenguas?'), ('languageEsp', 'español')]),
      OrderedDict([('questionNum', '2a'), ('color', 'purple'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'English'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'inglés')]),
      OrderedDict([('questionNum', '2b'), ('color', 'blue'), ('sectionEng', 'Language history'), ('questionTextEng', 'At what age did you start to feel comfortable using the following languages?'), ('languageEng', 'Spanish'), ('sectionEsp', 'Historial lingüístico'), ('questionTextEsp', '¿A qué edad empezó a sentirse cómodo usando las siguientes lenguas?'), ('languageEsp', 'español')])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
    Routine language_history_2
  LoopTerminator trials_blp_hist_2
  LoopInitiator trials_blp_hist_3 loopType="TrialHandler"
    Selected rows = 4:12
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_history_3
  LoopTerminator trials_blp_hist_3
  Routine lang_use_ins
  LoopInitiator trials_blp_use loopType="TrialHandler"
    Selected rows = 12:27
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_use
  LoopTerminator trials_blp_use
  Routine lang_prof_ins
  LoopInitiator trials_blp_prof loopType="TrialHandler"
    Selected rows = 27:35
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_proficiency
  LoopTerminator trials_blp_prof
  Routine lang_att_ins
  LoopInitiator trials_blp_att loopType="TrialHandler"
    Selected rows = 35:43
    conditionsFile = data/processed_data/exp_files/sp_en_blp_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine language_attitudes
  LoopTerminator trials_blp_att
  Routine gracias
