PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': 'part001', 'session': 'A', 'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.5
  Window size (pixels) = [1280, 800]
  expName = Syllabification
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        carrier="practiceListA%i" %pracTarLoop.thisN


        #for paramName in thisPracTrialLoop.keys():
            #if paramName == carrier:
                #print(paramName + ' round %i' %pracTrialLoop.thisN)
            #else:
                #print(paramName + ' round %i' %pracTrialLoop.thisN)
                #exec(paramName + '=thisPracTrialLoop.' + paramName)



        #if paramName != carrier:

        #thisPracTrialLoop = pracTrialLoop.trialList[0]  # so we can initialise stimuli with some values
        # abbreviate parameter names if possible (e.g. rgb = thisPracTrialLoop.rgb)
        #if thisPracTrialLoop != None:
        #    for paramName in thisPracTrialLoop:
                #print(paramName)
        #        if paramName == carrier:
        #            exec('{} = thisPracTrialLoop[paramName]'.format(paramName))
                    #print("still here " + paramName)
                #else:
                    #print("deleted " + paramName)
        #for thisPracTrialLoop in pracTrialLoop:
        #    currentLoop = pracTrialLoop
            # abbreviate parameter names if possible (e.g. rgb = thisPracTrialLoop.rgb)
        #    if thisPracTrialLoop != None:
        #        for paramName in thisPracTrialLoop:
        #            if paramName == carrier:
        #                exec('{} = thisPracTrialLoop[paramName]'.format(paramName))
                        #print("still here " + paramName)
                    #else:
                        #print("deleted " + paramName)
      End Routine:
        #if pracTrialLoop.thisN != 0:
        #    pracLoopCount +=1
        #targetP="pracLists%" %
    TextComponent pracCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $eval(carrier)
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    KeyboardComponent prac_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      store = nothing
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  Routine pracIns
    TextComponent initialIns
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted va a completar un experimento.

        Va a ver un target

        Después, verá otras palabras.

        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent startPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine target
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        pracLoopCount=0
        practiceTargets = []
        practiceCarriers ={}
        experimentTargets = {}
        experimentCarriers = {}

        if expInfo['session'] == 'A':
            condition="data/processed_data/exp_files/pracCondA.csv"
            targetP="practiceListA"
            targetExp="stimuliListA"
            #carrierP = "practiceListA"
            #carrierExp = "stimuliListA"
        elif expInfo['session'] == 'B':
            condition="data/processed_data/exp_files/pracCondB.csv"
            targetExp="stimuliB"
        elif expInfo['session'] == 'C':
            condition="data/processed_data/exp_files/pracCondC.csv"
            targetExp="stimuliC"
        else:
            condition="data/processed_data/exp_files/pracCondD.csv"
            targetExp="stimuliD"
      Begin Routine:
        targetP="practiceListA%i" %pracTarLoop.thisN
        #if targetP == str(pracTarLoop.thisTrial):
        #print(str(pracTarLoop.thisTrial) + ' %i' %pracTarLoop.thisN)




        #if targetP == 'stimuliPracitce1':
        #    trialTarget = pracTarget.setText("Find  " + eval(targetP))
        #else:
        #    trialTarget = pracTarget.setText("")
      End Routine:
        if pracTarLoop.thisN != 0:
            pracLoopCount +=1
        #practiceTargets = practiceTargets.append(pracTarLoop.thisTrial)
        #print('Dictionary maybe?')
        #print(practiceTargets)
    TextComponent pracTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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      text [set every repeat]:
        "Encuentre    " + $eval(targetP)
  Routine expIns
    TextComponent startExp
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted acaba de completar las pruebas.

        Recuerde:
        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.


        Presione 'la barra' para empezar el experimento.
    KeyboardComponent startExpTrials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI
    TextComponent interstimulibr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine targetExp
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        targetExp= targetExp + "%i" %expTarLoop.thisN
    TextComponent expTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = "Encuentre    " + $eval(targetExp)
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  Routine trialExp
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        if expInfo['session'] == 'A':
            carrierExp="stimuliA"
        elif expInfo['session'] == 'B':
            carrierExp="stimuliB"
        elif expInfo['session'] == 'C':
            carrierExp="stimuliC"
        else:
            carrierExp="stimuliD"
      Begin Routine:
        carrier2= carrierExp + "%i" %expTarLoop.thisN
    TextComponent expCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $eval(carrier2)
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    KeyboardComponent exp_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine thankYou
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas Gracias!
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  Routine trialSyllable
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        if expInfo['session'] == 'A':
            syllable="data/processed_data/exp_files/sylexpCondA.csv"
        elif expInfo['session'] == 'B':
            syllable="syllableB.xlsx"
        elif expInfo['session'] == 'C':
            syllable="syllableC.xlsx"
        else:
            syllable="syllableD.xlsx"
    TextComponent AnswerCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent AnswerCV
      letterHeight = 0.1
      pos = (.5,0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    TextComponent Syllable_Target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    KeyboardComponent sylExp_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine syllableExpIns
    TextComponent SyllableExpInsText
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Recuerde:
        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar el experimento.
    KeyboardComponent sylExpStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracIns
    TextComponent instructionSyl
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent sylPracStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracTrial
    TextComponent PracSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    TextComponent PracSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent PracSylAnsCV
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    KeyboardComponent sylPrac_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = nothing
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Flow
  Routine pracIns
  LoopInitiator pracTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = $condition
    loopType = sequential
    nReps = 8
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    Routine target
    LoopInitiator pracTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $condition
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator pracTrialLoop
  LoopTerminator pracTarLoop
  Routine expIns
  LoopInitiator expTarLoop loopType="TrialHandler"
    Selected rows = $[0]
    conditionsFile = $condition
    loopType = sequential
    nReps = 0
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    Routine targetExp
    LoopInitiator expTrialLoop loopType="TrialHandler"
      Selected rows = $[1,2,3,4,5,6,7,8,9,10,11,12]
      conditionsFile = $condition
      loopType = random
      nReps = 0
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      Routine trialExp
    LoopTerminator expTrialLoop
  LoopTerminator expTarLoop
  Routine syllablePracIns
  LoopInitiator sylPracLoop loopType="TrialHandler"
    conditionsFile = data/processed_data/exp_files/sylprac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('syllabification', 'pupila'), ('corrSyl', 'pu'), ('corrAns', 2.0), ('keyCVC', 'pup'), ('keyCV', 'pu')]),
      OrderedDict([('syllabification', 'pericia'), ('corrSyl', 'pe'), ('corrAns', 2.0), ('keyCVC', 'per'), ('keyCV', 'pe')]),
      OrderedDict([('syllabification', 'culata'), ('corrSyl', 'cu'), ('corrAns', 2.0), ('keyCVC', 'cul'), ('keyCV', 'cu')]),
      OrderedDict([('syllabification', 'ciruela'), ('corrSyl', 'ci'), ('corrAns', 2.0), ('keyCVC', 'cir'), ('keyCV', 'ci')]),
      OrderedDict([('syllabification', 'latencia'), ('corrSyl', 'la'), ('corrAns', 2.0), ('keyCVC', 'lat'), ('keyCV', 'la')]),
      OrderedDict([('syllabification', 'cantera'), ('corrSyl', 'can'), ('corrAns', 1.0), ('keyCVC', 'can'), ('keyCV', 'ca')]),
      OrderedDict([('syllabification', 'sendero'), ('corrSyl', 'sen'), ('corrAns', 1.0), ('keyCVC', 'sen'), ('keyCV', 'se')]),
      OrderedDict([('syllabification', 'gustazo'), ('corrSyl', 'gus'), ('corrAns', 1.0), ('keyCVC', 'gus'), ('keyCV', 'gu')]),
      OrderedDict([('syllabification', 'caldera'), ('corrSyl', 'cal'), ('corrAns', 1.0), ('keyCVC', 'cal'), ('keyCV', 'ca')]),
      OrderedDict([('syllabification', 'sordina'), ('corrSyl', 'sor'), ('corrAns', 1.0), ('keyCVC', 'sor'), ('keyCV', 'so')])]
    Routine syllablePracTrial
  LoopTerminator sylPracLoop
  Routine syllableExpIns
  LoopInitiator syllableLoop loopType="TrialHandler"
    conditionsFile = $syllable
    loopType = random
    nReps = 1
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    Routine trialSyllable
  LoopTerminator syllableLoop
  Routine thankYou
